// modelName Terkildsen_NaK_BG
// modelName: NaK_ATPase_BG_annotated - test
// modelName: NaK_ATPase_BG_annotated_test
// modelName: Terkildsen_NaK_BG_test
def model NaK_ATPase_BG_annotated as
  def unit volt_per_sec as
    unit volt;
    unit second {expo: -1.0};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1.0};
  enddef;
  def unit fmol_per_sec as
    unit second {expo: -1.0};
    unit fmol;
  enddef;
  def unit fA as
    unit ampere {pref: femto};
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit J_per_K_per_mol as
    unit mole {expo: -1.0};
    unit kelvin {expo: -1.0};
    unit joule;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1.0};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1.0};
  enddef;
  def unit pL as
    unit litre {pref: pico};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1.0};
  enddef;

  def comp environment as
    // is: https://identifiers.org/opb/OPB_01023
    // is: https://identifiers.org/opb/OPB_01023
    var t: second {init: 0};
    // is: https://identifiers.org/opb/OPB_00410
    // is: https://identifiers.org/opb/OPB_00410
    var R: J_per_K_per_mol {init: 8.314};
    // is: https://identifiers.org/opb/OPB_00293
    // is: https://identifiers.org/opb/OPB_00293
    var T: kelvin {init: 310};
    // is: https://identifiers.org/opb/OPB_00089
    // is: https://identifiers.org/opb/OPB_00089
    var F: C_per_mol {init: 96485};
    // is: https://identifiers.org/opb/OPB_01346
    // is: https://identifiers.org/opb/OPB_01346
    var q_mem: fC {init: -18408};
    // isComputationalComponentFor: #property_0; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_21: volt;
    // isComputationalComponentFor: #property_1; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_22: volt;
    // isComputationalComponentFor: #property_2; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_23: volt;
    // isComputationalComponentFor: #property_3; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_58: J_per_mol;
    // isComputationalComponentFor: #property_4; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_62: J_per_mol;
    var V_mem: volt;
    var I_mem: fA;
    var C_m: fF {init: 153400};
    var z_5: dimensionless {init: -0.054951};
    var z_8: dimensionless {init: -0.94505};
    // description: Charge translocated by R5
    var zF_5: C_per_mol;
    // description: Charge translocated by R8
    var zF_8: C_per_mol;
    var f_21: fA;
    var f_22: fA;
    var f_23: fA;
    var f_58: fmol_per_sec;
    var f_62: fmol_per_sec;
    // description: species thermodynamic constant
    var K_1: per_fmol {init: 101619537.2009};
    // description: species thermodynamic constant
    var K_10: per_fmol {init: 20459.5509};
    // description: species thermodynamic constant
    var K_11: per_fmol {init: 121.4456};
    // description: species thermodynamic constant
    var K_12: per_fmol {init: 3.1436};
    // description: species thermodynamic constant
    var K_13: per_fmol {init: 0.32549};
    // description: species thermodynamic constant
    var K_14: per_fmol {init: 156.3283};
    // description: species thermodynamic constant
    var K_15: per_fmol {init: 1977546.8577};
    // description: species thermodynamic constant
    var K_2: per_fmol {init: 63209.8623};
    // description: species thermodynamic constant
    var K_3: per_fmol {init: 157.2724};
    // description: species thermodynamic constant
    var K_4: per_fmol {init: 14.0748};
    // description: species thermodynamic constant
    var K_5: per_fmol {init: 5.0384};
    // description: species thermodynamic constant
    var K_6: per_fmol {init: 92.6964};
    // description: species thermodynamic constant
    var K_7: per_fmol {init: 4854.5924};
    // description: species thermodynamic constant
    var K_8: per_fmol {init: 15260.9786};
    // description: species thermodynamic constant
    var K_9: per_fmol {init: 13787022.8009};
    // description: species thermodynamic constant
    var K_H: per_fmol {init: 0.04565};
    // description: species thermodynamic constant
    var K_Ke: per_fmol {init: 0.009236};
    // description: species thermodynamic constant (Ki)
    var K_Ki: per_fmol {init: 0.0012595};
    // description: species thermodynamic constant
    var K_MgADP: per_fmol {init: 7.976e-05};
    // description: species thermodynamic constant
    var K_MgATP: per_fmol {init: 2.3715};
    // description: species thermodynamic constant
    var K_Nae: per_fmol {init: 0.0061242};
    // description: species thermodynamic constant
    var K_Nai: per_fmol {init: 0.00083514};
    // description: species thermodynamic constant
    var K_P: per_fmol {init: 0.04565};
    // isComputationalComponentFor: #property_5; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_1: fmol_per_sec {init: 330.5462};
    // isComputationalComponentFor: #property_6; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_10: fmol_per_sec {init: 259461.6507};
    // isComputationalComponentFor: #property_7; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_11: fmol_per_sec {init: 172042.3334};
    // isComputationalComponentFor: #property_8; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_12: fmol_per_sec {init: 6646440.3909};
    // isComputationalComponentFor: #property_9; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_13: fmol_per_sec {init: 597.4136};
    // isComputationalComponentFor: #property_10; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_14: fmol_per_sec {init: 70.9823};
    // isComputationalComponentFor: #property_11; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_15: fmol_per_sec {init: 0.015489};
    // isComputationalComponentFor: #property_12; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_2: fmol_per_sec {init: 132850.9145};
    // isComputationalComponentFor: #property_13; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_3: fmol_per_sec {init: 200356.0223};
    // isComputationalComponentFor: #property_14; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_4: fmol_per_sec {init: 2238785.3951};
    // isComputationalComponentFor: #property_15; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_5: fmol_per_sec {init: 10787.9052};
    // isComputationalComponentFor: #property_16; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_6: fmol_per_sec {init: 15.3533};
    // isComputationalComponentFor: #property_17; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_7: fmol_per_sec {init: 2.3822};
    // isComputationalComponentFor: #property_18; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_8: fmol_per_sec {init: 2.2855};
    // isComputationalComponentFor: #property_19; hasPhysicalDefinition https://identifiers.org/opb/OPB_01296
    var kappa_9: fmol_per_sec {init: 1540.1349};
    // isComputationalComponentFor: #property_20; #entity_0; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:24636; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_H: fmol {init: 0.0015128};
    // isComputationalComponentFor: #property_21; #entity_1; #entity_2; #entity_3; hasPhysicalDefinition https://identifiers.org/cl/CL:0002131; hasPhysicalDefinition http://identifiers.org/fma/FMA:70022; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29103; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_Ke: fmol {init: 27.9828};
    // isComputationalComponentFor: #property_22; #entity_4; #entity_5; part_of #entity_3; name Intracellular space; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29103; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_Ki: fmol {init: 0.038};
    // isComputationalComponentFor: #property_23; #entity_6; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:87194; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_MgADP: fmol {init: 0.038};
    // isComputationalComponentFor: #property_24; #entity_7; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:30617; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_MgATP: fmol {init: 380};
    // isComputationalComponentFor: #property_25; #entity_8; part_of #entity_2; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29101; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_Nae: fmol {init: 777.3};
    // isComputationalComponentFor: #property_26; #entity_9; part_of #entity_5; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:29101; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_Nai: fmol {init: 1900};
    // isComputationalComponentFor: #property_27; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P7: fmol {init: 0.534480003169437};
    // isComputationalComponentFor: #property_28; #entity_10; hasPhysicalDefinition https://identifiers.org/chebi/CHEBI:24838; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P_i: fmol {init: 0.038};
    // isComputationalComponentFor: #property_29; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P14: fmol {init: 0.00626267917464576};
    // isComputationalComponentFor: #property_30; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P15: fmol {init: 0.000446049400255497};
    // isComputationalComponentFor: #property_31; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P1: fmol {init: 4.06727417747628e-10};
    // isComputationalComponentFor: #property_32; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P2: fmol {init: 1.84495437200145e-09};
    // isComputationalComponentFor: #property_33; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P3: fmol {init: 0.00183103460985586};
    // isComputationalComponentFor: #property_34; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P4: fmol {init: 0.0324604777886237};
    // isComputationalComponentFor: #property_35; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P5: fmol {init: 0.143884405731667};
    // isComputationalComponentFor: #property_36; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P6: fmol {init: 0.00968432811008776};
    // isComputationalComponentFor: #property_37; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P10: fmol {init: 7.9739635710452e-05};
    // isComputationalComponentFor: #property_38; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P11: fmol {init: 0.00282186679243115};
    // isComputationalComponentFor: #property_39; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P12: fmol {init: 0.0281498805518011};
    // isComputationalComponentFor: #property_40; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P13: fmol {init: 0.0702590453291214};
    // isComputationalComponentFor: #property_41; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P8: fmol {init: 0.169644923453282};
    // isComputationalComponentFor: #property_42; hasPhysicalDefinition https://identifiers.org/opb/OPB_00340
    var x_P9: fmol {init: 5.63940980127252e-07};
    // isComputationalComponentFor: #property_43; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_1: J_per_mol;
    // isComputationalComponentFor: #property_44; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_2: J_per_mol;
    // isComputationalComponentFor: #property_45; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_3: J_per_mol;
    // isComputationalComponentFor: #property_46; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_4: J_per_mol;
    // isComputationalComponentFor: #property_47; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_5: J_per_mol;
    // isComputationalComponentFor: #property_48; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_6: J_per_mol;
    // isComputationalComponentFor: #property_49; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_7: J_per_mol;
    // isComputationalComponentFor: #property_50; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_8: J_per_mol;
    // isComputationalComponentFor: #property_51; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_9: J_per_mol;
    // isComputationalComponentFor: #property_52; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_10: J_per_mol;
    // isComputationalComponentFor: #property_53; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_11: J_per_mol;
    // isComputationalComponentFor: #property_54; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_12: J_per_mol;
    // isComputationalComponentFor: #property_55; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_13: J_per_mol;
    // isComputationalComponentFor: #property_56; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_14: J_per_mol;
    // isComputationalComponentFor: #property_57; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_15: J_per_mol;
    // isComputationalComponentFor: #property_58; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_16: J_per_mol;
    // isComputationalComponentFor: #property_59; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_17: J_per_mol;
    // isComputationalComponentFor: #property_60; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_18: J_per_mol;
    // isComputationalComponentFor: #property_61; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_19: J_per_mol;
    var e_20: J_per_mol;
    var e_24: J_per_mol;
    var e_25: J_per_mol;
    var e_26: J_per_mol;
    var e_27: J_per_mol;
    // isComputationalComponentFor: #property_62; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_28: J_per_mol;
    // isComputationalComponentFor: #property_63; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_29: J_per_mol;
    // isComputationalComponentFor: #property_64; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_30: J_per_mol;
    // isComputationalComponentFor: #property_65; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_31: J_per_mol;
    // isComputationalComponentFor: #property_66; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_32: J_per_mol;
    // isComputationalComponentFor: #property_67; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_33: J_per_mol;
    // isComputationalComponentFor: #property_68; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_34: J_per_mol;
    // isComputationalComponentFor: #property_69; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_35: J_per_mol;
    // isComputationalComponentFor: #property_70; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_36: J_per_mol;
    // isComputationalComponentFor: #property_71; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_37: J_per_mol;
    // isComputationalComponentFor: #property_72; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_38: J_per_mol;
    // isComputationalComponentFor: #property_73; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_39: J_per_mol;
    // isComputationalComponentFor: #property_74; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_40: J_per_mol;
    // isComputationalComponentFor: #property_75; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_41: J_per_mol;
    // isComputationalComponentFor: #property_76; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_42: J_per_mol;
    // isComputationalComponentFor: #property_77; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_43: J_per_mol;
    // isComputationalComponentFor: #property_78; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_44: J_per_mol;
    // isComputationalComponentFor: #property_79; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_45: J_per_mol;
    // isComputationalComponentFor: #property_80; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_46: J_per_mol;
    // isComputationalComponentFor: #property_81; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_47: J_per_mol;
    // isComputationalComponentFor: #property_82; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_48: J_per_mol;
    // isComputationalComponentFor: #property_83; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_49: J_per_mol;
    // isComputationalComponentFor: #property_84; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_50: J_per_mol;
    // isComputationalComponentFor: #property_85; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_51: J_per_mol;
    // isComputationalComponentFor: #property_86; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_52: J_per_mol;
    // isComputationalComponentFor: #property_87; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_53: J_per_mol;
    // isComputationalComponentFor: #property_88; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_54: J_per_mol;
    // isComputationalComponentFor: #property_89; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_55: J_per_mol;
    // isComputationalComponentFor: #property_90; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_56: J_per_mol;
    // isComputationalComponentFor: #property_91; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_57: J_per_mol;
    // isComputationalComponentFor: #property_92; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_59: J_per_mol;
    // isComputationalComponentFor: #property_93; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_60: J_per_mol;
    // isComputationalComponentFor: #property_94; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_61: J_per_mol;
    // isComputationalComponentFor: #property_95; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_63: J_per_mol;
    // isComputationalComponentFor: #property_96; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_64: J_per_mol;
    // isComputationalComponentFor: #property_97; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_65: J_per_mol;
    // isComputationalComponentFor: #property_98; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_66: J_per_mol;
    // isComputationalComponentFor: #property_99; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_67: J_per_mol;
    // isComputationalComponentFor: #property_100; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_68: J_per_mol;
    // isComputationalComponentFor: #property_101; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_69: J_per_mol;
    // isComputationalComponentFor: #property_102; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_70: J_per_mol;
    // isComputationalComponentFor: #property_103; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_71: J_per_mol;
    // isComputationalComponentFor: #property_104; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_72: J_per_mol;
    // isComputationalComponentFor: #property_105; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_73: J_per_mol;
    // isComputationalComponentFor: #property_106; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_74: J_per_mol;
    // isComputationalComponentFor: #property_107; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_75: J_per_mol;
    // isComputationalComponentFor: #property_108; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_76: J_per_mol;
    // isComputationalComponentFor: #property_109; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_77: J_per_mol;
    // isComputationalComponentFor: #property_110; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_78: J_per_mol;
    // isComputationalComponentFor: #property_111; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_79: J_per_mol;
    // isComputationalComponentFor: #property_112; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_80: J_per_mol;
    // isComputationalComponentFor: #property_113; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_81: J_per_mol;
    // isComputationalComponentFor: #property_114; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_82: J_per_mol;
    // isComputationalComponentFor: #property_115; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_83: J_per_mol;
    // isComputationalComponentFor: #property_116; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_84: J_per_mol;
    // isComputationalComponentFor: #property_117; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_85: J_per_mol;
    // isComputationalComponentFor: #property_118; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var e_86: J_per_mol;
    // isComputationalComponentFor: #property_119; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_1: fmol_per_sec;
    // isComputationalComponentFor: #property_120; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_2: fmol_per_sec;
    // isComputationalComponentFor: #property_121; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_3: fmol_per_sec;
    // isComputationalComponentFor: #property_122; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_4: fmol_per_sec;
    // isComputationalComponentFor: #property_123; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_5: fmol_per_sec;
    // isComputationalComponentFor: #property_124; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_6: fmol_per_sec;
    // isComputationalComponentFor: #property_125; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_7: fmol_per_sec;
    // isComputationalComponentFor: #property_126; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_8: fmol_per_sec;
    // isComputationalComponentFor: #property_127; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_9: fmol_per_sec;
    // isComputationalComponentFor: #property_128; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_10: fmol_per_sec;
    // isComputationalComponentFor: #property_129; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_11: fmol_per_sec;
    // isComputationalComponentFor: #property_130; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_12: fmol_per_sec;
    // isComputationalComponentFor: #property_131; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_13: fmol_per_sec;
    // isComputationalComponentFor: #property_132; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_14: fmol_per_sec;
    // isComputationalComponentFor: #property_133; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_15: fmol_per_sec;
    // isComputationalComponentFor: #property_134; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_16: fmol_per_sec;
    // isComputationalComponentFor: #property_135; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_17: fmol_per_sec;
    // isComputationalComponentFor: #property_136; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_18: fmol_per_sec;
    // isComputationalComponentFor: #property_137; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_19: fmol_per_sec;
    // isComputationalComponentFor: #property_138; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_20: fmol_per_sec;
    // isComputationalComponentFor: #property_139; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_24: fmol_per_sec;
    // isComputationalComponentFor: #property_140; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_25: fmol_per_sec;
    // isComputationalComponentFor: #property_141; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_26: fmol_per_sec;
    // isComputationalComponentFor: #property_142; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_27: fmol_per_sec;
    // isComputationalComponentFor: #property_143; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_28: fmol_per_sec;
    // isComputationalComponentFor: #property_144; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_29: fmol_per_sec;
    // isComputationalComponentFor: #property_145; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_30: fmol_per_sec;
    // isComputationalComponentFor: #property_146; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_31: fmol_per_sec;
    // isComputationalComponentFor: #property_147; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_32: fmol_per_sec;
    // isComputationalComponentFor: #property_148; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_33: fmol_per_sec;
    // isComputationalComponentFor: #property_149; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_34: fmol_per_sec;
    // isComputationalComponentFor: #property_150; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_35: fmol_per_sec;
    // isComputationalComponentFor: #property_151; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_36: fmol_per_sec;
    // isComputationalComponentFor: #property_152; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_37: fmol_per_sec;
    // isComputationalComponentFor: #property_153; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_38: fmol_per_sec;
    // isComputationalComponentFor: #property_154; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_39: fmol_per_sec;
    // isComputationalComponentFor: #property_155; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_40: fmol_per_sec;
    // isComputationalComponentFor: #property_156; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_41: fmol_per_sec;
    // isComputationalComponentFor: #property_157; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_42: fmol_per_sec;
    // isComputationalComponentFor: #property_158; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_43: fmol_per_sec;
    // isComputationalComponentFor: #property_159; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_44: fmol_per_sec;
    // isComputationalComponentFor: #property_160; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_45: fmol_per_sec;
    // isComputationalComponentFor: #property_161; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_46: fmol_per_sec;
    // isComputationalComponentFor: #property_162; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_47: fmol_per_sec;
    // isComputationalComponentFor: #property_163; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_48: fmol_per_sec;
    // isComputationalComponentFor: #property_164; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_49: fmol_per_sec;
    // isComputationalComponentFor: #property_165; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_50: fmol_per_sec;
    // isComputationalComponentFor: #property_166; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_51: fmol_per_sec;
    // isComputationalComponentFor: #property_167; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_52: fmol_per_sec;
    // isComputationalComponentFor: #property_168; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_53: fmol_per_sec;
    // isComputationalComponentFor: #property_169; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_54: fmol_per_sec;
    // isComputationalComponentFor: #property_170; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_55: fmol_per_sec;
    // isComputationalComponentFor: #property_171; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_56: fmol_per_sec;
    // isComputationalComponentFor: #property_172; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_57: fmol_per_sec;
    // isComputationalComponentFor: #property_173; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_59: fmol_per_sec;
    // isComputationalComponentFor: #property_174; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_60: fmol_per_sec;
    // isComputationalComponentFor: #property_175; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_61: fmol_per_sec;
    // isComputationalComponentFor: #property_176; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_63: fmol_per_sec;
    // isComputationalComponentFor: #property_177; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_64: fmol_per_sec;
    // isComputationalComponentFor: #property_178; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_65: fmol_per_sec;
    // isComputationalComponentFor: #property_179; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_66: fmol_per_sec;
    // isComputationalComponentFor: #property_180; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_67: fmol_per_sec;
    // isComputationalComponentFor: #property_181; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_68: fmol_per_sec;
    // isComputationalComponentFor: #property_182; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_69: fmol_per_sec;
    // isComputationalComponentFor: #property_183; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_70: fmol_per_sec;
    // isComputationalComponentFor: #property_184; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_71: fmol_per_sec;
    // isComputationalComponentFor: #property_185; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_72: fmol_per_sec;
    // isComputationalComponentFor: #property_186; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_73: fmol_per_sec;
    // isComputationalComponentFor: #property_187; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_74: fmol_per_sec;
    // isComputationalComponentFor: #property_188; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_75: fmol_per_sec;
    // isComputationalComponentFor: #property_189; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_76: fmol_per_sec;
    // isComputationalComponentFor: #property_190; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_77: fmol_per_sec;
    // isComputationalComponentFor: #property_191; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_78: fmol_per_sec;
    // isComputationalComponentFor: #property_192; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_79: fmol_per_sec;
    // isComputationalComponentFor: #property_193; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_80: fmol_per_sec;
    // isComputationalComponentFor: #property_194; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_81: fmol_per_sec;
    // isComputationalComponentFor: #property_195; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_82: fmol_per_sec;
    // isComputationalComponentFor: #property_196; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_83: fmol_per_sec;
    // isComputationalComponentFor: #property_197; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_84: fmol_per_sec;
    // isComputationalComponentFor: #property_198; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_85: fmol_per_sec;
    // isComputationalComponentFor: #property_199; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var f_86: fmol_per_sec;
    // isComputationalComponentFor: #property_200; physicalPropertyOf #metaid6; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_H: J_per_mol;
    // isComputationalComponentFor: #property_201; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_H: fmol_per_sec;
    // isComputationalComponentFor: #property_202; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_Ke: J_per_mol;
    // isComputationalComponentFor: #property_203; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_Ke: fmol_per_sec;
    // isComputationalComponentFor: #property_204; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_Ki: J_per_mol;
    // isComputationalComponentFor: #property_205; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_Ki: fmol_per_sec;
    // isComputationalComponentFor: #property_206; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_MgADP: J_per_mol;
    // isComputationalComponentFor: #property_207; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_MgADP: fmol_per_sec;
    // isComputationalComponentFor: #property_208; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_MgATP: J_per_mol;
    // isComputationalComponentFor: #property_209; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_MgATP: fmol_per_sec;
    // isComputationalComponentFor: #property_210; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_Nae: J_per_mol;
    // isComputationalComponentFor: #property_211; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_Nae: fmol_per_sec;
    // isComputationalComponentFor: #property_212; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_Nai: J_per_mol;
    // isComputationalComponentFor: #property_213; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_Nai: fmol_per_sec;
    // isComputationalComponentFor: #property_214; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P7: J_per_mol;
    // isComputationalComponentFor: #property_215; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P7: fmol_per_sec;
    // isComputationalComponentFor: #property_216; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P_i: J_per_mol;
    // isComputationalComponentFor: #property_217; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P_i: fmol_per_sec;
    // isComputationalComponentFor: #property_218; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R13: J_per_mol;
    // isComputationalComponentFor: #property_219; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R13: J_per_mol;
    // isComputationalComponentFor: #property_220; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R13: fmol_per_sec;
    // isComputationalComponentFor: #property_221; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R15: J_per_mol;
    // isComputationalComponentFor: #property_222; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R15: J_per_mol;
    // isComputationalComponentFor: #property_223; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R15: fmol_per_sec;
    // isComputationalComponentFor: #property_224; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R6: J_per_mol;
    // isComputationalComponentFor: #property_225; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R6: J_per_mol;
    // isComputationalComponentFor: #property_226; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R6: fmol_per_sec;
    // isComputationalComponentFor: #property_227; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R7: J_per_mol;
    // isComputationalComponentFor: #property_228; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R7: J_per_mol;
    // isComputationalComponentFor: #property_229; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R7: fmol_per_sec;
    // isComputationalComponentFor: #property_230; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P14: J_per_mol;
    // isComputationalComponentFor: #property_231; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P14: fmol_per_sec;
    // isComputationalComponentFor: #property_232; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P15: J_per_mol;
    // isComputationalComponentFor: #property_233; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P15: fmol_per_sec;
    // isComputationalComponentFor: #property_234; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R14: J_per_mol;
    // isComputationalComponentFor: #property_235; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R14: J_per_mol;
    // isComputationalComponentFor: #property_236; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R14: fmol_per_sec;
    // isComputationalComponentFor: #property_237; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P1: J_per_mol;
    // isComputationalComponentFor: #property_238; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P1: fmol_per_sec;
    // isComputationalComponentFor: #property_239; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P2: J_per_mol;
    // isComputationalComponentFor: #property_240; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P2: fmol_per_sec;
    // isComputationalComponentFor: #property_241; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P3: J_per_mol;
    // isComputationalComponentFor: #property_242; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P3: fmol_per_sec;
    // isComputationalComponentFor: #property_243; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P4: J_per_mol;
    // isComputationalComponentFor: #property_244; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P4: fmol_per_sec;
    // isComputationalComponentFor: #property_245; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P5: J_per_mol;
    // isComputationalComponentFor: #property_246; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P5: fmol_per_sec;
    // isComputationalComponentFor: #property_247; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P6: J_per_mol;
    // isComputationalComponentFor: #property_248; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P6: fmol_per_sec;
    // isComputationalComponentFor: #property_249; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R1: J_per_mol;
    // isComputationalComponentFor: #property_250; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R1: J_per_mol;
    // isComputationalComponentFor: #property_251; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R1: fmol_per_sec;
    // isComputationalComponentFor: #property_252; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R2: J_per_mol;
    // isComputationalComponentFor: #property_253; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R2: J_per_mol;
    // isComputationalComponentFor: #property_254; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R2: fmol_per_sec;
    // isComputationalComponentFor: #property_255; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R3: J_per_mol;
    // isComputationalComponentFor: #property_256; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R3: J_per_mol;
    // isComputationalComponentFor: #property_257; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R3: fmol_per_sec;
    // isComputationalComponentFor: #property_258; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R4: J_per_mol;
    // isComputationalComponentFor: #property_259; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R4: J_per_mol;
    // isComputationalComponentFor: #property_260; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R4: fmol_per_sec;
    // isComputationalComponentFor: #property_261; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R5: J_per_mol;
    // isComputationalComponentFor: #property_262; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R5: J_per_mol;
    // isComputationalComponentFor: #property_263; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R5: fmol_per_sec;
    // isComputationalComponentFor: #property_264; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P10: J_per_mol;
    // isComputationalComponentFor: #property_265; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P10: fmol_per_sec;
    // isComputationalComponentFor: #property_266; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P11: J_per_mol;
    // isComputationalComponentFor: #property_267; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P11: fmol_per_sec;
    // isComputationalComponentFor: #property_268; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P12: J_per_mol;
    // isComputationalComponentFor: #property_269; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P12: fmol_per_sec;
    // isComputationalComponentFor: #property_270; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P13: J_per_mol;
    // isComputationalComponentFor: #property_271; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P13: fmol_per_sec;
    // isComputationalComponentFor: #property_272; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P8: J_per_mol;
    // isComputationalComponentFor: #property_273; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P8: fmol_per_sec;
    // isComputationalComponentFor: #property_274; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var mu_P9: J_per_mol;
    // isComputationalComponentFor: #property_275; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_P9: fmol_per_sec;
    // isComputationalComponentFor: #property_276; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R10: J_per_mol;
    // isComputationalComponentFor: #property_277; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R10: J_per_mol;
    // isComputationalComponentFor: #property_278; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R10: fmol_per_sec;
    // isComputationalComponentFor: #property_279; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R11: J_per_mol;
    // isComputationalComponentFor: #property_280; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R11: J_per_mol;
    // isComputationalComponentFor: #property_281; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R11: fmol_per_sec;
    // isComputationalComponentFor: #property_282; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R12: J_per_mol;
    // isComputationalComponentFor: #property_283; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R12: J_per_mol;
    // isComputationalComponentFor: #property_284; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R12: fmol_per_sec;
    // isComputationalComponentFor: #property_285; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R8: J_per_mol;
    // isComputationalComponentFor: #property_286; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R8: J_per_mol;
    // isComputationalComponentFor: #property_287; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R8: fmol_per_sec;
    // isComputationalComponentFor: #property_288; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Af_R9: J_per_mol;
    // isComputationalComponentFor: #property_289; hasPhysicalDefinition https://identifiers.org/opb/OPB_00378
    var Ar_R9: J_per_mol;
    // isComputationalComponentFor: #property_290; hasPhysicalDefinition https://identifiers.org/opb/OPB_00592
    var v_R9: fmol_per_sec;
    e_23 = V_mem;
    I_mem = f_23;
    ode(q_mem, t) = 0.001{volt_per_sec}*C_m;
    V_mem = q_mem/C_m;
    zF_5 = z_5*F;
    zF_8 = z_8*F;
    // Power conversion
    // TF:zF_5
    e_58 = zF_5*e_22;
    f_22 = zF_5*f_58;
    // TF:zF_8
    e_62 = zF_8*e_21;
    f_21 = zF_8*f_62;
    e_14 = mu_H;
    v_H = f_14;
    ode(x_H, t) = 0{fmol_per_sec};
    mu_H = R*T*ln(K_H*x_H);
    e_11 = mu_Ke;
    v_Ke = f_11;
    ode(x_Ke, t) = 0{fmol_per_sec};
    mu_Ke = R*T*ln(K_Ke*x_Ke);
    e_2 = mu_Ki;
    v_Ki = f_2;
    ode(x_Ki, t) = 0{fmol_per_sec};
    mu_Ki = R*T*ln(K_Ki*x_Ki);
    e_9 = mu_MgADP;
    v_MgADP = f_9;
    ode(x_MgADP, t) = 0{fmol_per_sec};
    mu_MgADP = R*T*ln(K_MgADP*x_MgADP);
    e_16 = mu_MgATP;
    v_MgATP = f_16;
    ode(x_MgATP, t) = 0{fmol_per_sec};
    mu_MgATP = R*T*ln(K_MgATP*x_MgATP);
    e_19 = mu_Nae;
    v_Nae = f_19;
    ode(x_Nae, t) = 0{fmol_per_sec};
    mu_Nae = R*T*ln(K_Nae*x_Nae);
    e_5 = mu_Nai;
    v_Nai = f_5;
    ode(x_Nai, t) = 0{fmol_per_sec};
    mu_Nai = R*T*ln(K_Nai*x_Nai);
    e_8 = mu_P7;
    v_P7 = f_8;
    ode(x_P7, t) = v_P7;
    mu_P7 = R*T*ln(K_7*x_P7);
    e_15 = mu_P_i;
    v_P_i = f_15;
    ode(x_P_i, t) = 0{fmol_per_sec};
    mu_P_i = R*T*ln(K_P*x_P_i);
    Af_R13 = e_12;
    Ar_R13 = e_13;
    f_12 = v_R13;
    f_13 = v_R13;
    v_R13 = kappa_13*(exp(Af_R13/(R*T))-exp(Ar_R13/(R*T)));
    Af_R15 = e_17;
    Ar_R15 = e_4;
    f_17 = v_R15;
    f_4 = v_R15;
    v_R15 = kappa_15*(exp(Af_R15/(R*T))-exp(Ar_R15/(R*T)));
    Af_R6 = e_1;
    Ar_R6 = e_6;
    f_1 = v_R6;
    f_6 = v_R6;
    v_R6 = kappa_6*(exp(Af_R6/(R*T))-exp(Ar_R6/(R*T)));
    Af_R7 = e_10;
    Ar_R7 = e_20;
    f_10 = v_R7;
    f_20 = v_R7;
    v_R7 = kappa_7*(exp(Af_R7/(R*T))-exp(Ar_R7/(R*T)));
    e_24 = mu_P14;
    v_P14 = f_24;
    ode(x_P14, t) = v_P14;
    mu_P14 = R*T*ln(K_14*x_P14);
    e_28 = mu_P15;
    v_P15 = f_28;
    ode(x_P15, t) = v_P15;
    mu_P15 = R*T*ln(K_15*x_P15);
    Af_R14 = e_26;
    Ar_R14 = e_27;
    f_26 = v_R14;
    f_27 = v_R14;
    v_R14 = kappa_14*(exp(Af_R14/(R*T))-exp(Ar_R14/(R*T)));
    e_30 = mu_P1;
    v_P1 = f_30;
    ode(x_P1, t) = v_P1;
    mu_P1 = R*T*ln(K_1*x_P1);
    e_39 = mu_P2;
    v_P2 = f_39;
    ode(x_P2, t) = v_P2;
    mu_P2 = R*T*ln(K_2*x_P2);
    e_34 = mu_P3;
    v_P3 = f_34;
    ode(x_P3, t) = v_P3;
    mu_P3 = R*T*ln(K_3*x_P3);
    e_44 = mu_P4;
    v_P4 = f_44;
    ode(x_P4, t) = v_P4;
    mu_P4 = R*T*ln(K_4*x_P4);
    e_51 = mu_P5;
    v_P5 = f_51;
    ode(x_P5, t) = v_P5;
    mu_P5 = R*T*ln(K_5*x_P5);
    e_57 = mu_P6;
    v_P6 = f_57;
    ode(x_P6, t) = v_P6;
    mu_P6 = R*T*ln(K_6*x_P6);
    Af_R1 = e_35;
    Ar_R1 = e_36;
    f_35 = v_R1;
    f_36 = v_R1;
    v_R1 = kappa_1*(exp(Af_R1/(R*T))-exp(Ar_R1/(R*T)));
    Af_R2 = e_31;
    Ar_R2 = e_32;
    f_31 = v_R2;
    f_32 = v_R2;
    v_R2 = kappa_2*(exp(Af_R2/(R*T))-exp(Ar_R2/(R*T)));
    Af_R3 = e_42;
    Ar_R3 = e_43;
    f_42 = v_R3;
    f_43 = v_R3;
    v_R3 = kappa_3*(exp(Af_R3/(R*T))-exp(Ar_R3/(R*T)));
    Af_R4 = e_46;
    Ar_R4 = e_47;
    f_46 = v_R4;
    f_47 = v_R4;
    v_R4 = kappa_4*(exp(Af_R4/(R*T))-exp(Ar_R4/(R*T)));
    Af_R5 = e_53;
    Ar_R5 = e_55;
    f_53 = v_R5;
    f_55 = v_R5;
    v_R5 = kappa_5*(exp(Af_R5/(R*T))-exp(Ar_R5/(R*T)));
    e_70 = mu_P10;
    v_P10 = f_70;
    ode(x_P10, t) = v_P10;
    mu_P10 = R*T*ln(K_10*x_P10);
    e_75 = mu_P11;
    v_P11 = f_75;
    ode(x_P11, t) = v_P11;
    mu_P11 = R*T*ln(K_11*x_P11);
    e_83 = mu_P12;
    v_P12 = f_83;
    ode(x_P12, t) = v_P12;
    mu_P12 = R*T*ln(K_12*x_P12);
    e_79 = mu_P13;
    v_P13 = f_79;
    ode(x_P13, t) = v_P13;
    mu_P13 = R*T*ln(K_13*x_P13);
    e_59 = mu_P8;
    v_P8 = f_59;
    ode(x_P8, t) = v_P8;
    mu_P8 = R*T*ln(K_8*x_P8);
    e_65 = mu_P9;
    v_P9 = f_65;
    ode(x_P9, t) = v_P9;
    mu_P9 = R*T*ln(K_9*x_P9);
    Af_R10 = e_71;
    Ar_R10 = e_72;
    f_71 = v_R10;
    f_72 = v_R10;
    v_R10 = kappa_10*(exp(Af_R10/(R*T))-exp(Ar_R10/(R*T)));
    Af_R11 = e_81;
    Ar_R11 = e_82;
    f_81 = v_R11;
    f_82 = v_R11;
    v_R11 = kappa_11*(exp(Af_R11/(R*T))-exp(Ar_R11/(R*T)));
    Af_R12 = e_77;
    Ar_R12 = e_78;
    f_77 = v_R12;
    f_78 = v_R12;
    v_R12 = kappa_12*(exp(Af_R12/(R*T))-exp(Ar_R12/(R*T)));
    Af_R8 = e_60;
    Ar_R8 = e_61;
    f_60 = v_R8;
    f_61 = v_R8;
    v_R8 = kappa_8*(exp(Af_R8/(R*T))-exp(Ar_R8/(R*T)));
    Af_R9 = e_66;
    Ar_R9 = e_86;
    f_66 = v_R9;
    f_86 = v_R9;
    v_R9 = kappa_9*(exp(Af_R9/(R*T))-exp(Ar_R9/(R*T)));
    // Junction equations
    // 0 junction #1
    e_3 = e_5;
    f_5 = f_3;
    // 0 junction #2
    e_7 = e_8;
    e_10 = e_8;
    f_8 = f_7-f_10;
    // 0 junction #3
    e_21 = e_23;
    e_22 = e_23;
    f_23 = f_21+f_22;
    // 1 junction #1
    f_7 = f_6;
    f_9 = f_6;
    e_6 = e_7+e_9;
    // 1 junction #2
    f_14 = f_13;
    f_15 = f_13;
    f_18 = f_13;
    e_13 = e_14+e_15+e_18;
    // 0 junction #4
    e_25 = e_24;
    e_18 = e_24;
    f_24 = -f_25+f_18;
    // 0 junction #5
    e_27 = e_28;
    e_17 = e_28;
    f_28 = f_27-f_17;
    // 0 junction #6
    e_29 = e_16;
    f_16 = -f_29;
    // 1 junction #3
    f_25 = f_26;
    f_29 = f_26;
    e_26 = e_25+e_29;
    // 0 junction #7
    e_35 = e_30;
    e_4 = e_30;
    f_30 = -f_35+f_4;
    // 0 junction #8
    e_37 = e_2;
    e_40 = e_2;
    f_2 = f_37+f_40;
    // 0 junction #9
    e_33 = e_34;
    e_41 = e_34;
    f_34 = f_33-f_41;
    // 0 junction #10
    e_31 = e_39;
    e_38 = e_39;
    f_39 = -f_31+f_38;
    // 0 junction #11
    e_43 = e_44;
    e_45 = e_44;
    f_44 = f_43-f_45;
    // 0 junction #12
    e_48 = e_3;
    e_50 = e_3;
    f_3 = -f_48-f_50;
    // 0 junction #13
    e_49 = e_50;
    e_54 = e_50;
    f_50 = f_49+f_54;
    // 0 junction #14
    e_47 = e_51;
    e_52 = e_51;
    f_51 = f_47-f_52;
    // 0 junction #15
    e_56 = e_57;
    e_1 = e_57;
    f_57 = f_56-f_1;
    // 1 junction #4
    f_33 = f_32;
    f_40 = f_32;
    e_32 = e_33+e_40;
    // 1 junction #5
    f_37 = f_36;
    f_38 = f_36;
    e_36 = e_37+e_38;
    // 1 junction #6
    f_41 = f_42;
    f_48 = f_42;
    e_42 = e_41+e_48;
    // 1 junction #7
    f_45 = f_46;
    f_49 = f_46;
    e_46 = e_45+e_49;
    // 1 junction #8
    f_52 = f_53;
    f_54 = f_53;
    e_53 = e_52+e_54;
    // 1 junction #9
    f_56 = f_55;
    f_58 = f_55;
    e_55 = e_56+e_58;
    // 0 junction #16
    e_60 = e_59;
    e_20 = e_59;
    f_59 = -f_60+f_20;
    // 0 junction #17
    e_63 = e_19;
    e_68 = e_19;
    f_19 = f_63+f_68;
    // 0 junction #18
    e_64 = e_65;
    e_66 = e_65;
    f_65 = f_64-f_66;
    // 0 junction #19
    e_69 = e_68;
    e_73 = e_68;
    f_68 = f_69+f_73;
    // 0 junction #20
    e_67 = e_70;
    e_71 = e_70;
    f_70 = f_67-f_71;
    // 0 junction #21
    e_74 = e_75;
    e_80 = e_75;
    f_75 = f_74-f_80;
    // 0 junction #22
    e_84 = e_11;
    e_85 = e_11;
    f_11 = -f_84-f_85;
    // 0 junction #23
    e_78 = e_79;
    e_12 = e_79;
    f_79 = f_78-f_12;
    // 0 junction #24
    e_76 = e_83;
    e_82 = e_83;
    f_83 = -f_76+f_82;
    // 1 junction #10
    f_62 = f_61;
    f_63 = f_61;
    f_64 = f_61;
    e_61 = e_63+e_64+e_62;
    // 1 junction #11
    f_67 = f_86;
    f_69 = f_86;
    e_86 = e_67+e_69;
    // 1 junction #12
    f_73 = f_72;
    f_74 = f_72;
    e_72 = e_73+e_74;
    // 1 junction #13
    f_80 = f_81;
    f_84 = f_81;
    e_81 = e_80+e_84;
    // 1 junction #14
    f_76 = f_77;
    f_85 = f_77;
    e_77 = e_76+e_85;
  enddef;
enddef;
